PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  color = 0.9922, 0.9608, 0.8902
  expName = PWI_png
  keyboardBackend = ioHub
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Routines
  Routine welcome
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    TextComponent textWelcome
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.030
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        The experiment will consist of four phases: a familiarization phase, a familiarization check, a practice trial, and experimental trials.

        During the familiarization phase, multiple single object images will be presented. You will be expected to familiarize yourself with the names of these images. Press enter when ready to move to the next screen.

        You will then move on to a familiarization exercise to ensure you can correctly identify the names of these images.

        Each practice and experimental trial will begin with a red fixation cross that will remain on the screen for 300 ms. After the cross disappears, an image of a single object will appear superimposed with some text. Below the image, you will see a red dot indicating the microphone is ready to record.

        Please say the name of the image as quickly as possible. This name should match the object name provided during the familiarization exercise.

        When finished stating the name, press enter to move to the next trial.

        You will be reminded of these instructions prior to the start of the trials.

        If at any time you need technical assistance or any questions/concerns, please contact the research assistant.

        Press enter when ready
    KeyboardComponent key_respWelcome
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank500
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine practice
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    ImageComponent imagePractice
      image = practice/Screenshot 2024-03-18 at 9.40.56 AM.png
      size = [1.2,.8]
      startVal [time (s)] = 0.0
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    KeyboardComponent key_respPractice
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent textPractice
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = Press Enter When Ready
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  Routine familiarization
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    ImageComponent imageFamiliar
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_respFamiliarization
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent textFamiliarization
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -.35)
      startVal [time (s)] = 0.0
      text = Press Enter When Ready
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  Routine goodbye
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    TextComponent textGoodbye
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        The experiment is over.

        Thank you for participating.
        If you have any questions or concerns, you may email
        Richard Futrell
        IRB

        Press enter to end
    KeyboardComponent key_resp_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine betweentrialbreak
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    TextComponent text_6
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, .25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        You are done with that set.
        You may now take up to a 1 minute rest.
        A countdown will appear when the experiment is close.
        Press enter at any time to bypass this break
    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    TextComponent ten
      color = 0.8431, -1.0000, -1.0000
      letterHeight = 0.5
      pos = (0, -.06)
      startVal [time (s)] = 50
      stopVal [duration (s)] = 1
      text = 10
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    TextComponent nine
      color = 0.8431, -1.0000, -1.0000
      letterHeight = 0.5
      pos = (0, -.06)
      startVal [time (s)] = 51
      stopVal [duration (s)] = 1
      text = 9
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    TextComponent eight
      color = 0.8431, -1.0000, -1.0000
      letterHeight = 0.5
      pos = (0, -.06)
      startVal [time (s)] = 52
      stopVal [duration (s)] = 1
      text = 8
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    TextComponent seven
      color = 0.8431, -1.0000, -1.0000
      letterHeight = 0.5
      pos = (0, -.06)
      startVal [time (s)] = 53
      stopVal [duration (s)] = 1
      text = 7
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    TextComponent six
      color = 0.8431, -1.0000, -1.0000
      letterHeight = 0.5
      pos = (0, -.06)
      startVal [time (s)] = 54
      stopVal [duration (s)] = 1
      text = 6
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    TextComponent five
      color = 0.8431, -1.0000, -1.0000
      letterHeight = 0.5
      pos = (0, -.06)
      startVal [time (s)] = 55
      stopVal [duration (s)] = 1
      text = 5
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    TextComponent four
      color = 0.8431, -1.0000, -1.0000
      letterHeight = 0.5
      pos = (0, -.06)
      startVal [time (s)] = 56
      stopVal [duration (s)] = 1
      text = 4
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    TextComponent three
      color = 0.8431, -1.0000, -1.0000
      letterHeight = 0.5
      pos = (0, -.06)
      startVal [time (s)] = 57
      stopVal [duration (s)] = 1
      text = 3
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    TextComponent two
      color = 0.8431, -1.0000, -1.0000
      letterHeight = 0.5
      pos = (0, -.06)
      startVal [time (s)] = 58
      stopVal [duration (s)] = 1
      text = 2
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    TextComponent one
      color = 0.8431, -1.0000, -1.0000
      letterHeight = 0.5
      pos = (0, -.06)
      startVal [time (s)] = 59
      stopVal [duration (s)] = 1
      text = 1
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    TextComponent text_16end
      color = red
      letterHeight = 0.07
      pos = (0, -.06)
      startVal [time (s)] = 60
      text = PRESS ENTER NOW
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  Routine familiarIntro
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    TextComponent text_7
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The familiarization stage will now begin.

        Remember to take your time and familiarize yourself with the name of each object. You will be asked to name these items in the trial.

        Press enter when ready to begin.
    KeyboardComponent key_resp_7
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TrialInstructions
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    TextComponent text_12TrialInstructions
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        TRIAL INSTRUCTIONS

        Each trial will begin with a red fixation cross that will remain on the screen for 300 ms. After the cross disappears, an image of a single object will appear superimposed with some text. Below the image, you will see a red dot indicating the microphone is ready to record.

        Please say the name of the image as quickly as possible. This name should match the object name provided during the familiarization exercise.

        When finished stating the name, press enter to move to the next trial.

        Throughout the experiment, will receive seven 1 minute breaks that may be skipped at your discretion.

        If at any time you need technical assitance or any questions/concerns, please contact the research assistant.

        The trial will now begin
        Press enter when ready
    KeyboardComponent key_resp_trialBegin
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine NewSetBegin
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    TextComponent text_NewSet
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = The next trial is begining now
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  Routine NameTest
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    ImageComponent image_one
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
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    TextComponent key_enter
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -.45)
      startVal [time (s)] = 2
      text = Press Enter
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    TextComponent text_15
      color = -1.0000, 0.0039, -1.0000
      letterHeight = 0.07
      pos = (0.07, -.3)
      startVal [time (s)] = 1.5
      text [set every repeat] = $name
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    TextComponent text_14
      color = black
      letterHeight = 0.07
      pos = (-.35, -.3)
      startVal [time (s)] = 1.5
      text = Correct Answer: 
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  Routine practiceTrial
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    PolygonComponent fixation1
      fillColor = 0.6627, -1.0000, -1.0000
      lineColor = 0.6627, -1.0000, -1.0000
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
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    ImageComponent image_Practice
      image [set every repeat] = $image
      size = (0.45, 0.45)
      startVal [time (s)] = .3
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    PolygonComponent polygon
      fillColor = 0.6627, -1.0000, -1.0000
      lineColor = 0.6627, -1.0000, -1.0000
      pos = (0, -.35)
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = .3
      stopVal [duration (s)] = 5
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    TextComponent text_13
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -.45)
      startVal [time (s)] = 3.3
      text = Press Enter When Ready
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    KeyboardComponent key_resp_4
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 3.3
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  Routine NamingIntro
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    TextComponent text_12NamingInstruct
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the familiarization check

        An image will appear on the screen. Please say the name of the image as quickly as possible. This familiarization check is about making sure you know the name of the object in the image.

        The correct name of the image will appear on the screen after 3 seconds.

        Press enter when ready to begin.
    KeyboardComponent key_resp_5
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practiceTrialInstructions
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    TextComponent text_12
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        PRACTICE TRIAL INSTRUCTIONS

        Each trial will begin with a red fixation cross that will remain on the screen for 300 ms. After the cross disappears, an image of a single object will appear superimposed with some text. Below the image, you will see a red dot indicating the microphone is ready to record.

        Please say the name of the image as quickly as possible. This name should match the object name provided during the familiarization exercise.

        When finished stating the name, press enter to move to the next trial.

        If at any time you need technical assistance or any questions/concerns, please contact the research assistant.

        The practice trial will now begin.
        Press enter when ready
    KeyboardComponent key_resp_6
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trial_Set_1
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    PolygonComponent Fixation_Set_1
      fillColor = 0.6627, -1.0000, -1.0000
      lineColor = 0.6627, -1.0000, -1.0000
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .300
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    ImageComponent image_2_set_1
      image [set every repeat] = $image_2
      size = (0.5, 0.5)
      startVal [time (s)] = .450
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    ImageComponent image_1_set_1
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = .3
      stopVal [duration (s)] = .2
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    PolygonComponent Recording_Circle_Set_1
      fillColor = 0.6627, -1.0000, -1.0000
      lineColor = 0.6627, -1.0000, -1.0000
      pos = (0, -.35)
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = .300
      stopVal [duration (s)] = 5
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    MicrophoneComponent Mic_Set_1
      channels = auto
      device = None
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = .3
      stopVal [duration (s)] = 5
      transcribe = False
      transcribeBackend = Whisper
      transcribeLang = en-US
      transcribeWhisperModel = base
      trimSilent = False
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    TextComponent Enter_Text_Set_1
      color = -1.0000, -1.0000, -1.0000
      font = Verdana
      letterHeight = 0.03
      pos = (0, -.45)
      startVal [time (s)] = .3
      text = Press Enter When Ready
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    KeyboardComponent Enter_Response_Set_1
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = .3
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  Routine Trial_Set_2
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    PolygonComponent Fixation_Set_2
      fillColor = 0.6627, -1.0000, -1.0000
      lineColor = 0.6627, -1.0000, -1.0000
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .300
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    ImageComponent image_2_set_2
      image [set every repeat] = $image_2
      size = (0.5, 0.5)
      startVal [time (s)] = .450
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    ImageComponent image_1_set_2
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = .3
      stopVal [duration (s)] = .2
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    PolygonComponent Recording_Circle_Set_2
      fillColor = 0.6627, -1.0000, -1.0000
      lineColor = 0.6627, -1.0000, -1.0000
      pos = (0, -.35)
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = .3
      stopVal [duration (s)] = 5
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    MicrophoneComponent Mic_Set_2
      channels = auto
      device = None
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = .3
      stopVal [duration (s)] = 5
      transcribe = False
      transcribeBackend = Whisper
      transcribeLang = en-US
      transcribeWhisperModel = base
      trimSilent = False
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    TextComponent Enter_Text_Set_2
      color = black
      letterHeight = 0.03
      pos = (0, -.45)
      startVal [time (s)] = .3
      text = Press Enter When Ready
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    KeyboardComponent Enter_Response_Set_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = .3
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  Routine Trial_Set_3
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    PolygonComponent Fixation_Set_3
      fillColor = 0.6627, -1.0000, -1.0000
      lineColor = 0.6627, -1.0000, -1.0000
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
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    ImageComponent image_2_set_3
      image [set every repeat] = $image_2
      size = (0.5, 0.5)
      startVal [time (s)] = .450
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    ImageComponent image_1_set_3
      image [set every repeat] = $image_2
      size = (0.5, 0.5)
      startVal [time (s)] = .3
      stopVal [duration (s)] = .2
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    PolygonComponent Recording_Circle_Set_3
      fillColor = 0.6627, -1.0000, -1.0000
      lineColor = 0.6627, -1.0000, -1.0000
      pos = (0, -.35)
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = .3
      stopVal [duration (s)] = 5
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    MicrophoneComponent Mic_Set_3
      channels = auto
      device = None
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = .3
      stopVal [duration (s)] = 5
      transcribe = False
      transcribeBackend = Whisper
      transcribeLang = en-US
      transcribeWhisperModel = base
      trimSilent = False
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    TextComponent Enter_Text_Set_3
      color = black
      letterHeight = 0.03
      pos = (0, -.45)
      startVal [time (s)] = .3
      text = Press Enter When Ready
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    KeyboardComponent Enter_Response_Set_3
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = .3
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  Routine Trial_Set_4
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    PolygonComponent Fixation_Set_4
      fillColor = 0.6627, -1.0000, -1.0000
      lineColor = 0.6627, -1.0000, -1.0000
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
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    ImageComponent image_2_set_4
      image [set every repeat] = $image_2
      size = (0.5, 0.5)
      startVal [time (s)] = .450
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    ImageComponent image_1_set_4
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = .3
      stopVal [duration (s)] = .2
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    PolygonComponent Recording_Circle_Set_4
      fillColor = 0.6627, -1.0000, -1.0000
      lineColor = 0.6627, -1.0000, -1.0000
      pos = (0, -.35)
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = .3
      stopVal [duration (s)] = 5
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    MicrophoneComponent Mic_Set_4
      channels = auto
      device = None
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = .3
      stopVal [duration (s)] = 5
      transcribe = False
      transcribeBackend = Whisper
      transcribeLang = en-US
      transcribeWhisperModel = base
      trimSilent = False
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    TextComponent Enter_Text_Set_4
      color = black
      letterHeight = 0.03
      pos = (0, -.45)
      startVal [time (s)] = .3
      text = Press Enter When Ready
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    KeyboardComponent Enter_Response_Set_4
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = .3
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Flow
  Routine welcome
  Routine blank500
  Routine TrialInstructions
  LoopInitiator Trial_1 loopType="TrialHandler"
    conditionsFile = exp_items_s1.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('group', 'A'), ('item', 1), ('target', 'tortoise'), ('distractor', 'tortoise'), ('image', 'image/tortoiseID_posSOA.png'), ('image_2', 'image/tortoiseID_posSOA2.png'), ('condition', 'ID'), ('SOA', 150)]),
      OrderedDict([('group', 'A'), ('item', 2), ('target', 'dagger'), ('distractor', 'dagger'), ('image', 'image/dagger_NEU.png'), ('image_2', 'image/dagger_NEU2.png'), ('condition', 'NEU'), ('SOA', 0)]),
      OrderedDict([('group', 'A'), ('item', 3), ('target', 'leg'), ('distractor', 'leg'), ('image', 'image/legID_negSOA.png'), ('image_2', 'image/legID_negSOA2.png'), ('condition', 'ID'), ('SOA', -150)]),
      OrderedDict([('group', 'A'), ('item', 4), ('target', 'sword'), ('distractor', 'dagger'), ('image', 'image/sword_REL.png'), ('image_2', 'image/sword_REL2.png'), ('condition', 'REL'), ('SOA', 0)]),
      OrderedDict([('group', 'A'), ('item', 5), ('target', 'nose'), ('distractor', 'nose'), ('image', 'image/nose_ID.png'), ('image_2', 'image/nose_ID2.png'), ('condition', 'ID'), ('SOA', 0)]),
      OrderedDict([('group', 'A'), ('item', 6), ('target', 'castle'), ('distractor', 'castle'), ('image', 'image/castleNEU_posSOA.png'), ('image_2', 'image/castleNEU_posSOA2.png'), ('condition', 'NEU'), ('SOA', 150)]),
      OrderedDict([('group', 'A'), ('item', 7), ('target', 'nose'), ('distractor', 'arm'), ('image', 'image/noseREL_negSOA.png'), ('image_2', 'image/noseREL_negSOA2.png'), ('condition', 'REL'), ('SOA', -150)])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
    Routine blank500
    Routine Trial_Set_1
  LoopTerminator Trial_1
  Routine betweentrialbreak
  Routine NewSetBegin
  LoopInitiator Trial_2 loopType="TrialHandler"
    conditionsFile = exp_items_s2.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('group', 'A'), ('item', 119), ('target', 'car'), ('distractor', 'car'), ('image', 'image/carID_posSOA.png'), ('image_2', 'image/carID_posSOA2.png'), ('condition', 'ID'), ('SOA', 150)]),
      OrderedDict([('group', 'A'), ('item', 68), ('target', 'jug'), ('distractor', 'windmill'), ('image', 'image/jugUNREL_negSOA.png'), ('image_2', 'image/jugUNREL_negSOA2.png'), ('condition', 'UNREL'), ('SOA', -150)]),
      OrderedDict([('group', 'A'), ('item', 91), ('target', 'cannon'), ('distractor', 'cannon'), ('image', 'image/cannonNEU_negSOA.png'), ('image_2', 'image/cannonNEU_negSOA2.png'), ('condition', 'NEU'), ('SOA', -150)]),
      OrderedDict([('group', 'A'), ('item', 72), ('target', 'bike'), ('distractor', 'wardrobe'), ('image', 'image/bikeUNREL_posSOA.png'), ('image_2', 'image/bikeUNREL_posSOA2.png'), ('condition', 'UNREL'), ('SOA', 150)]),
      OrderedDict([('group', 'A'), ('item', 28), ('target', 'plane'), ('distractor', 'glass'), ('image', 'image/planeUNREL_posSOA.png'), ('image_2', 'image/planeUNREL_posSOA2.png'), ('condition', 'UNREL'), ('SOA', 150)]),
      OrderedDict([('group', 'A'), ('item', 22), ('target', 'jug'), ('distractor', 'jug'), ('image', 'image/jug_NEU.png'), ('image_2', 'image/jug_NEU2.png'), ('condition', 'NEU'), ('SOA', 0)]),
      OrderedDict([('group', 'A'), ('item', 128), ('target', 'bed'), ('distractor', 'pistol'), ('image', 'image/bedUNREL_negSOA.png'), ('image_2', 'image/bedUNREL_negSOA2.png'), ('condition', 'UNREL'), ('SOA', -150)])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
    Routine blank500
    Routine Trial_Set_2
  LoopTerminator Trial_2
  Routine betweentrialbreak
  Routine NewSetBegin
  LoopInitiator Trial_3 loopType="TrialHandler"
    conditionsFile = exp_items_s3.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('group', 'A'), ('item', 7), ('target', 'wardrobe'), ('distractor', 'wardrobe'), ('image', 'image/wardrobeID_posSOA.png'), ('image_2', 'image/wardrobeID_posSOA2.png'), ('condition', 'ID'), ('SOA', 150)]),
      OrderedDict([('group', 'A'), ('item', 94), ('target', 'coat'), ('distractor', 'coat'), ('image', 'image/coatNEU_negSOA.png'), ('image_2', 'image/coatNEU_negSOA2.png'), ('condition', 'NEU'), ('SOA', -150)]),
      OrderedDict([('group', 'A'), ('item', 93), ('target', 'cannon'), ('distractor', 'pistol'), ('image', 'image/cannonREL_posSOA.png'), ('image_2', 'image/cannonREL_posSOA2.png'), ('condition', 'REL'), ('SOA', 150)]),
      OrderedDict([('group', 'A'), ('item', 69), ('target', 'rabbit'), ('distractor', 'deer'), ('image', 'image/rabbitREL_posSOA.png'), ('image_2', 'image/rabbitREL_posSOA2.png'), ('condition', 'REL'), ('SOA', 150)]),
      OrderedDict([('group', 'A'), ('item', 35), ('target', 'cup'), ('distractor', 'cup'), ('image', 'image/cupNEU_negSOA.png'), ('image_2', 'image/cupNEU_negSOA2.png'), ('condition', 'NEU'), ('SOA', -150)]),
      OrderedDict([('group', 'A'), ('item', 31), ('target', 'arm'), ('distractor', 'arm'), ('image', 'image/arm_ID.png'), ('image_2', 'image/arm_ID2.png'), ('condition', 'ID'), ('SOA', 0)]),
      OrderedDict([('group', 'A'), ('item', 5), ('target', 'castle'), ('distractor', 'church'), ('image', 'image/castleREL_negSOA.png'), ('image_2', 'image/castleREL_negSOA2.png'), ('condition', 'REL'), ('SOA', -150)])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
    Routine blank500
    Routine Trial_Set_3
  LoopTerminator Trial_3
  Routine betweentrialbreak
  Routine NewSetBegin
  LoopInitiator Trial_4 loopType="TrialHandler"
    conditionsFile = exp_items_s4.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('group', 'A'), ('item', 42), ('target', 'desk'), ('distractor', 'bed'), ('image', 'image/deskREL_negSOA.png'), ('image_2', 'image/deskREL_negSOA2.png'), ('condition', 'REL'), ('SOA', -150)]),
      OrderedDict([('group', 'A'), ('item', 76), ('target', 'nose'), ('distractor', 'factory'), ('image', 'image/noseUNREL_posSOA.png'), ('image_2', 'image/noseUNREL_posSOA2.png'), ('condition', 'UNREL'), ('SOA', 150)]),
      OrderedDict([('group', 'A'), ('item', 94), ('target', 'coat'), ('distractor', 'coat'), ('image', 'image/coatNEU_negSOA.png'), ('image_2', 'image/coatNEU_negSOA2.png'), ('condition', 'NEU'), ('SOA', -150)]),
      OrderedDict([('group', 'A'), ('item', 80), ('target', 'windmill'), ('distractor', 'jug'), ('image', 'image/windmillUNREL_posSOA.png'), ('image_2', 'image/windmillUNREL_posSOA2.png'), ('condition', 'UNREL'), ('SOA', 150)]),
      OrderedDict([('group', 'A'), ('item', 113), ('target', 'rabbit'), ('distractor', 'rabbit'), ('image', 'image/rabbitID_negSOA.png'), ('image_2', 'image/rabbitID_negSOA2.png'), ('condition', 'ID'), ('SOA', -150)]),
      OrderedDict([('group', 'A'), ('item', 35), ('target', 'cup'), ('distractor', 'cup'), ('image', 'image/cupNEU_negSOA.png'), ('image_2', 'image/cupNEU_negSOA2.png'), ('condition', 'NEU'), ('SOA', -150)]),
      OrderedDict([('group', 'A'), ('item', 82), ('target', 'sword'), ('distractor', 'dagger'), ('image', 'image/swordREL_negSOA.png'), ('image_2', 'image/swordREL_negSOA2.png'), ('condition', 'REL'), ('SOA', -150)])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
    Routine blank500
    Routine Trial_Set_4
  LoopTerminator Trial_4
  Routine goodbye
